CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage)

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:_(?P<Cell>[A-Z]{3})_(?P<Age>[A-Z]{3})_(?P<Sex>[A-Z]{3})_(?P<Protein>.{1,3})_(?P<Treatment>[A-Z]{3})_e(?P<ExperimentNumber>[0-9]{2})_w(?P<WellNumber>[0-9]{2})_Position_(?P<ImageNumber>[0-9]{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:Iba1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:NanoTube
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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
    Select the input image:Hoechst
    Name the output image:Hoechst_r
    Resizing method:Resize by specifying desired final dimensions
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    Width of the final image:1024
    Height of the final image:1024
    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Manual
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    Additional image count:0

Resize:[module_num:6|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
    Select the input image:Iba1
    Name the output image:Iba1_r
    Resizing method:Resize by specifying desired final dimensions
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    Width of the final image:1024
    Height of the final image:1024
    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Manual
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    Additional image count:0

Resize:[module_num:7|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
    Select the input image:NanoTube
    Name the output image:Nanotube_r
    Resizing method:Resize by specifying desired final dimensions
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    Width of the final image:1024
    Height of the final image:1024
    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Manual
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    Additional image count:0

RescaleIntensity:[module_num:8|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
    Select the input image:Nanotube_r
    Name the output image:Nanotube_Rescaled
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.05,1.0
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
Smooth:[module_num:9|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
    Select the input image:Hoechst_r
    Name the output image:Hoechst_smooth
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Hoechst_smooth
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Log transform before thresholding?:No
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
Smooth:[module_num:11|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
    Select the input image:Iba1_r
    Name the output image:Iba1_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:Nuclei
    Name the objects to be identified:WholeCell
    Select the method to identify the secondary objects:Propagation
    Select the input image:Iba1_smooth
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:WholeCell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:14|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enabled:False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
    Select the objects to filter:WholeCell
    Name the output objects:WholeCell_Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:450
    Filter using a maximum measurement value?:Yes
    Maximum value:10000
    Select additional object to relabel:Nuclei
    Name the relabeled objects:nuclei_Filtered

IdentifyTertiaryObjects:[module_num:15|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enabled:False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
    Select the larger identified objects:WholeCell_Filtered
    Select the smaller identified objects:nuclei_Filtered
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

ExpandOrShrinkObjects:[module_num:16|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notes:['This is TOTAL.']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enabled:False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
    Select the input objects:WholeCell_Filtered
    Name the output objects:ExpandedWholeCell
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
IdentifyTertiaryObjects:[module_num:17|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enabled:False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
    Select the larger identified objects:ExpandedWholeCell
    Select the smaller identified objects:WholeCell_Filtered
    Name the tertiary objects to be identified:Membrane
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:18|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
    Select images to measure:Nanotube_Rescaled
    Select objects to measure:WholeCell

DisplayDataOnImage:[module_num:19|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:WholeCell_Filtered
    Measurement to display:Intensity_IntegratedIntensity_Nanotube_Rescaled
    Select the image on which to display the measurements:Nanotube_Rescaled
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Volumes/DG_Backup_E/SAPNAS/Pirminiu lasteliu eksperimentai_final/EXPERIMENT/data_out
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Metadata_Sex,Image|Metadata_WellNumber,Image|Metadata_ImageNumber,Image|Metadata_ExperimentNumber,Image|Metadata_Cell,Image|Metadata_Age,Image|Metadata_Protein,Image|Metadata_Treatment,WholeCell|AreaShape_EulerNumber,WholeCell|AreaShape_Perimeter,WholeCell|AreaShape_Solidity,WholeCell|AreaShape_BoundingBoxArea,WholeCell|AreaShape_Area,WholeCell|AreaShape_Extent,WholeCell|AreaShape_Eccentricity,WholeCell|AreaShape_ConvexArea,WholeCell|AreaShape_Compactness,WholeCell|AreaShape_FormFactor,WholeCell|Intensity_MeanIntensity_Nanotube_Rescaled,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:SAPNAS_PM_Final_Int_VS_Morphology_20220623
    Overwrite existing files without warning?:No
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